PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '', 'profession': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = eth_ws_team_p04
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  tbModel = Tobii Pro Fusion
  tbSampleRate = 120
  tbSerialNo = TPFC1-010200149364
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Routines
  Routine title
    TextComponent txt_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ::: Safety Inspecter :::
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    ImageComponent img_title
      image = C:/Users/qasim/Downloads/WhatsApp Image 2023-01-12 at 9.21.17 AM.jpeg
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent txt_continue
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = :: Press space to start  ::
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    KeyboardComponent title_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent inst_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ::: Instructions :::
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
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      text:
        You are our safety insepctor!


        A building safety inspector identifies conditions of the building construction that can be safety risks.


        Please look at the images and help us to identify damages to the building fabric.

        :: Press Space to Start ::
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine tr_fixation_mark
    ImageComponent img_fix
      image [set every repeat] = $'stimuli/' + fix
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine tr_questions
    CodeComponent code_io_ques
      Code Type = Py
      Begin Experiment:
        ioServer.sendMessageEvent(text='%s' % win.units, category='units')
      Begin Routine:
        ioServer.sendMessageEvent(text='%s%s' % ('start:',trial_id), category = 'trial_question')
      End Routine:
        ioServer.sendMessageEvent(text='%s%s' % ('end:',trial_id), category = 'trial_question')
    EyetrackerRecordComponent et_eye_recording
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
    ImageComponent img_ques
      image [set every repeat] = $'stimuli/' + ques
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 60
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  Routine tr_answers
    CodeComponent code_io_answ
      Code Type = Py
      Begin Routine:
        ioServer.sendMessageEvent(text='%s%s' % ('start:',trial_id), category = 'trial_answer')
      End Routine:
        ioServer.sendMessageEvent(text='%s%s' % ('end:',trial_id), category = 'trial_answer')
    EyetrackerRecordComponent etRec_trac
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.5
      syncScreenRefresh = False
    ImageComponent answer
      image [set every repeat] = $'stimuli/' + answ
      saveStartStop = False
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_ans
      allowedKeys = 'a','b','c'
      correctAns = $cor
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine nasa
    TextComponent nasa_question
      color = black
      letterHeight = 0.02
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nasa_ques
      wrapWidth = 1
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    TextComponent nasa_tresec
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nasa_tre
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    SliderComponent nasa_slider
      borderColor = lightgray
      color = gray
      fillColor = blue
      forceEndRoutine = True
      granularity = 1
      labels = "no","yes"
      letterHeight = 0.03
      saveStartStop = False
      size = (1.0, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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  Routine end
    ImageComponent end_img
      image = stimuli/thankyou.jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calib_instr
    ImageComponent calb_img
      image = instructions/calib_i.jpeg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent cal_keyb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine valid_instr
    ImageComponent valid_img
      image = instructions/valid_i.jpeg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent valid_keybrd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calib_count
    CodeComponent ccode_calib_count
      Code Type = Py
      Begin Experiment:
        timeout = 10

        from math import atan2, degrees

        h = 19.7 # Monitor height in cm
        d = 62 # Distance between monitor and participant in cm
        r = 1080 # Vertical resolution of the monitor

        # Calculate the number of degrees that correspond to a single pixel.
        deg_per_px = degrees(atan2(.5*h, d)) / (.5*r)

        # Calculate the number of degrees that correspond to a number in height units.
        deg_per_hu = deg_per_px * r
      Begin Routine:
        #present validation results
        results = validation.getValidationResults()
        valid_results = "Validation Results in height units\nMin: %.4f, Max: %.4f, Mean: %.4f (%s units)\n" % \
          (results['min_error'], results['max_error'], results['mean_error'], \
           results['reporting_unit_type'])

        valid_results_deg = "Validation Results in degree visual angle\nMin: %.4f, Max: %.4f, Mean: %.4f" % \
          (results['min_error']*deg_per_hu, results['max_error']*deg_per_hu, results['mean_error']*deg_per_hu)

        calib_query = "%s\n%s\n\nRecalibrate (y/n)?" % (valid_results,valid_results_deg)
      End Routine:
        #calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            print (valid_results,valid_results_deg)
            calib_loop.finished = True
    TextComponent calib_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = black
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = black
    units = from exp settings
Flow
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = timeout
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    EyetrackerCalibrationRoutine calibration
    Routine valid_instr
    EyetrackerValidationRoutine validation
    Routine calib_count
  LoopTerminator calib_loop
  Routine title
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_code.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 'ts01'), ('fix', 'tsf01.jpeg'), ('ques', 'tsq01.jpeg'), ('answ', 'tsa01.jpeg'), ('cor', 'c')]),
      OrderedDict([('trial_id', 'ts02'), ('fix', 'tsf02.jpeg'), ('ques', 'tsq02.jpeg'), ('answ', 'tsa02.jpeg'), ('cor', 'b')]),
      OrderedDict([('trial_id', 'ts03'), ('fix', 'tsf03.jpeg'), ('ques', 'tsq03.jpeg'), ('answ', 'tsa03.jpeg'), ('cor', 'b')])]
    Routine tr_fixation_mark
    Routine tr_questions
    Routine tr_answers
  LoopTerminator trials
  LoopInitiator nasa_trials loopType="TrialHandler"
    conditionsFile = nasa_tlx_eng.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nasa_ques', '::: MENTAL DEMAND :::'), ('nasa_tre', 'Was the task mentally demanding?')]),
      OrderedDict([('nasa_ques', '::: PHYSICAL DEMAND :::'), ('nasa_tre', 'Was the task physically demanding?')]),
      OrderedDict([('nasa_ques', '::: TEMPORAL DEMAND :::'), ('nasa_tre', 'Were you hurried or rushed to pace of the task?')]),
      OrderedDict([('nasa_ques', '::: PERFORMANCE :::'), ('nasa_tre', 'Were you successful in accomplishing what you were asked to do?')]),
      OrderedDict([('nasa_ques', '::: EFFORT :::'), ('nasa_tre', 'Did you have to work hard to accomplish your level of performance?')]),
      OrderedDict([('nasa_ques', '::: FRUSTRATION :::'), ('nasa_tre', 'Were you insecure, discouraged, irritated, stressed, and annoyed?')])]
    Routine nasa
  LoopTerminator nasa_trials
  Routine end
